PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'time': 'a'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = emoreg-stim-rater
  keyboardBackend = ioHub
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Routines
  Routine trial
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    SliderComponent rating_scale_3
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = (0,1,2,3,4,5,6)
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (1.2, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1,2,3,4,5,6)
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    ImageComponent stim_3
      image [set every repeat] = $stim_path
      pos = (0, 0.3)
      size = (0.5, None)
      startVal [time (s)] = 0.0
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    ButtonComponent next_button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0.42)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = next
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    TextboxComponent left_anchor
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (-0.60, -0.4)
      size = (0.3, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $"No pleasant or positive feelings" if Valence=="positive" else "No unpleasant or negative feelings"
    TextboxComponent right_anchor
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.60, -0.4)
      size = (0.3, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $"Strong pleasant or positive feelings" if Valence=="positive" else "Strong unpleasant or negative feelings"
    TextboxComponent center_anchor
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.4, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $"Moderate pleasant or positive feelings" if Valence=="positive" else "Moderate unpleasant or negative feelings"
    TextboxComponent response_2
      bold = False
      editable = False
      letterHeight = 0.03
      size = (1.0, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"Please rate the degree to which you experienced the following in response to the picture: How {'pleasant' if Valence=='positive' else 'unpleasant'} or {Valence} did you feel?"
  Routine pause
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    TextboxComponent pause_box
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine instructions
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = $"During this task, you will be viewing and rating a series of pictures. These pictures will show a diverse set of themes and situations involving people, animals, places, or objects.\n\nAfter you view each picture, we will ask you about your reaction to it. We are interested in your genuine response to each of these pictures. The ratings you provide will help us guide our future research, so it is important that you give each picture your full attention and rate them as accurately and honestly as possible.\n\nPlease click \"Next\" to continue."
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    ButtonComponent next_button_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0.42)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = next
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    TextboxComponent header_textbox
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Task Instructions
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  Routine instructions_2
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = $"On each trial, you will first see a picture appear on the screen. You will later rate this picture. The task is designed to be self-paced, so please view each picture for as long as you need to form an impression.\n\nPlease click \"Next\" to continue."
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    ButtonComponent next_button_3
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0.42)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = next
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    TextboxComponent header_textbox_2
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Task Instructions
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  Routine instructions_3
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    TextboxComponent textbox_3
      bold = False
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = $"Some of the pictures contain disturbing content. Please engage with all pictures as best you can. If at any point you need to take a pause, please feel free to do so.\n\nPlease click \"Next\" to continue."
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    ButtonComponent next_button_4
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0.42)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = next
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    TextboxComponent header_textbox_3
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Task Instructions
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  Routine instructions_4
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    TextboxComponent textbox_4
      bold = False
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = $"When you are ready to rate a picture, you will press the spacebar to move to the ratings screen.\n\nYou will rate your positive or negative feelings towards each picture.\n\nPlease click \"Next\" to continue."
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    ButtonComponent next_button_5
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0.42)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = next
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    TextboxComponent header_textbox_4
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Task Instructions
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  Routine instructions_5
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    ButtonComponent next_button_6
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0.42)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = next
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    TextboxComponent textbox_5
      bold = False
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = $"We will now do a practice trial. The trial will proceed as follows:\n\n1. Image presentation: Press the spacebar to present the picture.\n2. Image viewing: View the picture for as long as you like. Please take your time and view the picture for as long as you feel is necessary to accurately rate it.\n3. Spacebar to proceed: Press the spacebar when you feel ready to report your reactions to the picture.\n4. Reaction ratings: Use the ratings screen to report your reactions to the picture. For each rating, click on the slider to indicate the degree to which you experienced that reaction.\n\nWhen you are ready to begin, please press click \"Next\" to present the first practice image."
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    TextboxComponent header_textbox_5
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Task Instructions
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  Routine practice_spacebar
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    TextboxComponent textbox_6
      bold = False
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = $"Press the spacebar to present the image"
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_image
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    ImageComponent practice_img
      image = practiceimage/pln_16_e.jpg
      size = (1.2, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_8
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.65, -0.45)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = (press space to advance)
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  Routine instructions_6
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    ButtonComponent next_button_7
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0.42)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = next
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    TextboxComponent header_textbox_6
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Task Instructions
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    TextboxComponent left_anchor_2
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (-0.60, -0.4)
      size = (0.3, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        No pleasant or positive feelings
    TextboxComponent right_anchor_2
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.60, -0.4)
      size = (0.3, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = Strong pleasant or positive feelings
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    ImageComponent stim_2
      image [set every repeat] = practiceimage/pln_16_e.jpg
      pos = (0, 0.3)
      size = (0.5, None)
      startVal [time (s)] = 0.0
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    SliderComponent rating_scale_2
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = (0,1,2,3,4,5,6)
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (1.2, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,1,2,3,4,5,6)
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    TextboxComponent right_anchor_3
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.4)
      size = (0.3, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = Moderate pleasant or positive feelings
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    TextboxComponent response
      bold = False
      editable = False
      letterHeight = 0.03
      size = (1.0, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Please rate the degree to which you experienced the following in response to the picture: How pleasant or positive did you feel?
  Routine instructions_7
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    ButtonComponent next_button_8
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.75, 0.42)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = next
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    TextboxComponent textbox_7
      bold = False
      editable = False
      letterHeight = 0.03
      size = (1, 1)
      startVal [time (s)] = 0.0
      text = $"You have now completed practice trials and will move on to the main picture rating task.\n\nPlease press \"Next\" to begin."
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    TextboxComponent header_textbox_7
      bold = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = Practice Complete
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  Routine stim_pres
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    ImageComponent practice_img_2
      image [set every repeat] = $stim_path
      size = (1.2, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_9
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.65, -0.45)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = (press space to advance)
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Flow
  Routine instructions
  Routine instructions_2
  Routine instructions_3
  Routine instructions_4
  Routine instructions_5
  Routine practice_spacebar
  Routine practice_image
  Routine instructions_6
  Routine instructions_7
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $slice(0,44) if expInfo['time']=='a' else slice(44,88)
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim_path', './stims/pln_14_b.jpg'), ('face_path', './faces/22.jpg'), ('Valence', 'positive'), ('ITI', 9000), ('ISI', 2117), ('TrialLen', 15617), ('TrialLenSec', 15.617), ('TrialLenSum', 15.617), ('face_gender', 'f')]),
      OrderedDict([('stim_path', './stims/suf_08_h.jpg'), ('face_path', './faces/45.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2283), ('TrialLen', 15783), ('TrialLenSec', 15.783), ('TrialLenSum', 31.4), ('face_gender', 'm')]),
      OrderedDict([('stim_path', './stims/pln_06_f.jpg'), ('face_path', './faces/36.jpg'), ('Valence', 'positive'), ('ITI', 9000), ('ISI', 2050), ('TrialLen', 15550), ('TrialLenSec', 15.55), ('TrialLenSum', 46.95), ('face_gender', 'm')]),
      OrderedDict([('stim_path', './stims/hrm_14_i.jpg'), ('face_path', './faces/33.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2500), ('TrialLen', 16000), ('TrialLenSec', 16.0), ('TrialLenSum', 62.95), ('face_gender', 'm')]),
      OrderedDict([('stim_path', './stims/suf_05_g.jpg'), ('face_path', './faces/4.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2067), ('TrialLen', 15567), ('TrialLenSec', 15.567), ('TrialLenSum', 78.517), ('face_gender', 'f')]),
      OrderedDict([('stim_path', './stims/suf_07_d.jpg'), ('face_path', './faces/32.jpg'), ('Valence', 'negative'), ('ITI', 9000), ('ISI', 2983), ('TrialLen', 16483), ('TrialLenSec', 16.483), ('TrialLenSum', 95.0), ('face_gender', 'm')])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
    Routine stim_pres
    Routine trial
    Routine pause
  LoopTerminator trials
